PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Aahna_Delay_Discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or " + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 33, 'future_reward': 104, 'delay': 146},
      {'reward_today': 59, 'future_reward': 125, 'delay': 114},
      {'reward_today': 85, 'future_reward': 103, 'delay': 149},
      {'reward_today': 32, 'future_reward': 76, 'delay': 165},
      {'reward_today': 73, 'future_reward': 132, 'delay': 165},
      {'reward_today': 85, 'future_reward': 95, 'delay': 159},
      {'reward_today': 62, 'future_reward': 100, 'delay': 156},
      {'reward_today': 65, 'future_reward': 78, 'delay': 177},
      {'reward_today': 54, 'future_reward': 102, 'delay': 169},
      {'reward_today': 57, 'future_reward': 84, 'delay': 77},
      {'reward_today': 66, 'future_reward': 96, 'delay': 91},
      {'reward_today': 60, 'future_reward': 107, 'delay': 17},
      {'reward_today': 71, 'future_reward': 109, 'delay': 9},
      {'reward_today': 60, 'future_reward': 92, 'delay': 36},
      {'reward_today': 69, 'future_reward': 92, 'delay': 126},
      {'reward_today': 61, 'future_reward': 81, 'delay': 142},
      {'reward_today': 65, 'future_reward': 103, 'delay': 110},
      {'reward_today': 82, 'future_reward': 84, 'delay': 75},
      {'reward_today': 55, 'future_reward': 95, 'delay': 90},
      {'reward_today': 35, 'future_reward': 122, 'delay': 108}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
    Routine trial
  LoopTerminator trials
